PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1470, 956]
  expName = Solo project
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine StudyPhase
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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
    TextComponent stimuli
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Word
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  Routine TestPhase
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    TextComponent TestWord
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      text [set every repeat] = $Word
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    KeyboardComponent Response
      allowedKeys [set every repeat] = 'o','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Welcome_Routine
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    TextComponent Welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = "Remember the words that will be shown on the screen"
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  Routine instruction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = "Type O for old words and N for New"
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Flow
  Routine Welcome_Routine
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = StudyWords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Word': 'Apple'},
      {'Word': 'Banana'},
      {'Word': 'Orange'},
      {'Word': 'Grape'},
      {'Word': 'Mango'},
      {'Word': 'Cherry'},
      {'Word': 'Lemon'},
      {'Word': 'Peach'},
      {'Word': 'Melon'},
      {'Word': 'Berry'}]
    Routine StudyPhase
  LoopTerminator trials
  Routine instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = TestWords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Word': 'Apple', 'Type': 'Old', 'Correct': 'o'},
      {'Word': 'Banana', 'Type': 'Old', 'Correct': 'o'},
      {'Word': 'Orange', 'Type': 'Old', 'Correct': 'o'},
      {'Word': 'Grape', 'Type': 'Old', 'Correct': 'o'},
      {'Word': 'Mango', 'Type': 'Old', 'Correct': 'o'},
      {'Word': 'Cherry', 'Type': 'Old', 'Correct': 'o'},
      {'Word': 'Lemon', 'Type': 'Old', 'Correct': 'o'},
      {'Word': 'Peach', 'Type': 'Old', 'Correct': 'o'},
      {'Word': 'Melon', 'Type': 'Old', 'Correct': 'o'},
      {'Word': 'Berry', 'Type': 'Old', 'Correct': 'o'},
      {'Word': 'Carrot', 'Type': 'New', 'Correct': 'n'},
      {'Word': 'Onion', 'Type': 'New', 'Correct': 'n'},
      {'Word': 'Potato', 'Type': 'New', 'Correct': 'n'},
      {'Word': 'Pumpkin', 'Type': 'New', 'Correct': 'n'},
      {'Word': 'Spinach', 'Type': 'New', 'Correct': 'n'},
      {'Word': 'Tomato', 'Type': 'New', 'Correct': 'n'},
      {'Word': 'Garlic', 'Type': 'New', 'Correct': 'n'},
      {'Word': 'Celery', 'Type': 'New', 'Correct': 'n'},
      {'Word': 'Broccoli', 'Type': 'New', 'Correct': 'n'},
      {'Word': 'Cucumber', 'Type': 'New', 'Correct': 'n'}]
    Routine TestPhase
  LoopTerminator trials_2
